PsychoPy2experiment version="2024.1.5"
Settings
  Audio latency priority = 0
  Audio lib = sounddevice
  Data filename = u'data/%s_%s_%s' % (expInfo['Subject'], expName, expInfo['date'])
  Experiment info = {'Session': '1', 'Subject': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 2023.2.2
  Window size (pixels) = [1440, 900]
  expName = Motor_Task
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine endBuffer
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    TextComponent text_3
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = THE END
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  Routine complex_block
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    ImageComponent index2
      image = key.png
      pos = [-0.5, -0.1]
      size = [0.3, 0.4]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent middle2
      image = key.png
      pos = [-0.15, 0.10]
      size = [0.3, 0.4]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent ring2
      image = key.png
      pos = [0.2, -0.05]
      size = [0.3, 0.4]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent little2
      image = key.png
      pos = [0.55, -0.25]
      size = [0.3, 0.4]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent marker
      image = marker.png
      pos [set every repeat] = markerPos
      size = [0.2, 0.25]
      startVal [time (s)] = 0.15
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4'
      correctAns = $correctResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Trigger
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    TextComponent text_2
      letterHeight = 0.03
      pos = [0, -0.3]
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        The experiment will last about 5 minutes
        Press any key to begin
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent image
      image = right_hand_motor.png
      size = [0.4, .5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text_4
      letterHeight = 0.03
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
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      text:
        Clear your mind and focus on the screen
        Respond as QUICKLY and ACCURATELY as you can
        Use the following response keys: 1 2 3 4
        All four fingers (no thumb)
  Routine new_routine
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Flow
  Routine Trigger
  LoopInitiator complex_block_loop loopType="TrialHandler"
    conditionsFile = complex_loop.xlsx
    loopType = sequential
    nReps = 20
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    conditions:
      [{'trial': 1, 'finger': 'M', 'markerPos': [-0.15, 0.1], 'correctResp': 2.0},
      {'trial': 2, 'finger': 'R', 'markerPos': [0.2, -0.05], 'correctResp': 3.0},
      {'trial': 3, 'finger': 'M', 'markerPos': [-0.15, 0.1], 'correctResp': 2.0},
      {'trial': 4, 'finger': 'R', 'markerPos': [0.2, -0.05], 'correctResp': 3.0},
      {'trial': 5, 'finger': 'I', 'markerPos': [-0.5, -0.1], 'correctResp': 1.0},
      {'trial': 6, 'finger': 'I', 'markerPos': [-0.5, -0.1], 'correctResp': 1.0},
      {'trial': 7, 'finger': 'R', 'markerPos': [0.2, -0.05], 'correctResp': 3.0},
      {'trial': 8, 'finger': 'M', 'markerPos': [-0.15, 0.1], 'correctResp': 2.0},
      {'trial': 9, 'finger': 'L', 'markerPos': [0.55, -0.25], 'correctResp': 4.0},
      {'trial': 10, 'finger': 'I', 'markerPos': [-0.5, -0.1], 'correctResp': 1.0}]
    Routine complex_block
  LoopTerminator complex_block_loop
  LoopInitiator new_block_loop loopType="TrialHandler"
    conditionsFile = complex_loop.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('trial', 1), ('finger', 'm'), ('markerPos', [-0.15, 0.1]), ('correctResp', 2)]),
      OrderedDict([('trial', 2), ('finger', 'r'), ('markerPos', [0.2, -0.05]), ('correctResp', 3)]),
      OrderedDict([('trial', 3), ('finger', 'm'), ('markerPos', [-0.15, 0.1]), ('correctResp', 2)]),
      OrderedDict([('trial', 4), ('finger', 'r'), ('markerPos', [0.2, -0.05]), ('correctResp', 3)]),
      OrderedDict([('trial', 5), ('finger', 'i'), ('markerPos', [-0.5, -0.1]), ('correctResp', 1)]),
      OrderedDict([('trial', 6), ('finger', 'r'), ('markerPos', [0.2, -0.05]), ('correctResp', 3)]),
      OrderedDict([('trial', 7), ('finger', 'i'), ('markerPos', [-0.5, -0.1]), ('correctResp', 1)]),
      OrderedDict([('trial', 8), ('finger', 'i'), ('markerPos', [-0.5, -0.1]), ('correctResp', 1)]),
      OrderedDict([('trial', 9), ('finger', 'm'), ('markerPos', [-0.15, 0.1]), ('correctResp', 3)]),
      OrderedDict([('trial', 10), ('finger', 'l'), ('markerPos', [0.55, -0.25]), ('correctResp', 4)])]
    Routine complex_block
  LoopTerminator new_block_loop
  Routine endBuffer
