PsychoPy2experiment version="2023.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = orientation
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine trial
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    GratingComponent grating
      color = $[.5,.5,.5]
      durationEstim = .116
      mask = gauss
      ori [set every repeat] = $level*tiltSide
      phase = 0.5
      pos [set every repeat] = $stimLoc
      sf = 1
      size = (3,3)
      startVal [time (s)] = 0.5
      stopVal [duration (frames)] = 7
      tex = sin
      texture resolution = 512
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        lastLevel = level
    PolygonComponent fixation_circle
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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  Routine instructions
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    TextboxComponent instructions1
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 1
      padding = None
      startVal [time (s)] = 0.0
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      text:
        KEEP YOUR EYES ON THE FIXATION DOT.
        TRY NOT TO MOVE YOU EYES
        IS THE GRATING TILTED LEFT OR RIGHT?
        USE ARROWS
        IT WILL GET VERY DIFFICULT AND IT’S OKAY TO GUESS IF YOU DON’T KNOW
        IT’S OKAY TO TAKE A QUICK BREAK TO REST YOUR EYES IF YOU NEED TO
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_intro
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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  Routine updateTilt
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    CodeComponent tilt
      Code Type = Py
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      Begin Routine:
        if random()>0.5:
            tiltSide = -1 #this is the side it tilts to
            correctAns = 'left'
            if random()>0.5:
                stimLoc = [5,  5] #this is the location
            else:
                stimLoc = [5, -5]
        else:
            tiltSide = 1
            correctAns = 'right'
            if random()>0.5:
                stimLoc = [5, 5] #this is the location
            else:
                stimLoc = [5, -5]

        print(tiltSide*level)
  Routine updateTilt2
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            tiltSide = -1 #this is the side it tilts to
            correctAns = 'left'
            if random()>0.5:
                stimLoc = [-5,  5] #this is the location
            else:
                stimLoc = [-5, -5]
        else:
            tiltSide = 1
            correctAns = 'right'
            if random()>0.5:
                stimLoc = [-5, 5] #this is the location
            else:
                stimLoc = [-5, -5]

        print(tiltSide*level)
  Routine Instructions2
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    TextboxComponent instructions1_2
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 1
      padding = None
      startVal [time (s)] = 0.0
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      text:
        SAME TASK
        NEW STIMULUS LOCATIONS
        PRESS EITHER ARROW TO BEGIN
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    DotsComponent fixation1_2
      coherence = 1.0
      color = red
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .2
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="MultiStairHandler"
    conditions = [{'label': 'staircase1', 'nReps': 50, 'startVal': 40, 'maxVal': 40, 'minVal': 0, 'stepSizes': 0.8, 'stepType': "log'", 'nUp': 1, 'nDown': 3, 'nReversals': 20, 'startValSd': 20, 'pThreshold': 0.82, 'method': 'quantile', 'beta': 0.5, 'delta': 0, 'gamma': 0.5, 'grain': 0.01, 'range': 2}]
    conditionsFile = staircaseTemplate1_or.xlsx
    loopType = interleaved staircases
    nReps = 50
    stairType = QUEST
    switchMethod = random
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    Routine updateTilt
    Routine trial
  LoopTerminator trials
  Routine Instructions2
  LoopInitiator trials_2 loopType="MultiStairHandler"
    conditions = [{'label': 'starcase2', 'nReps': 50, 'startVal': 30, 'maxVal': 45, 'minVal': 0, 'stepSizes': 0.8, 'stepType': "log'", 'nUp': 1, 'nDown': 3, 'nReversals': 25, 'startValSd': 20, 'pThreshold': 0.82, 'method': 'quantile', 'beta': 0.5, 'delta': 0, 'gamma': 0.5, 'grain': 0.01, 'range': 80}]
    conditionsFile = staircaseTemplate2_or.xlsx
    loopType = interleaved staircases
    nReps = 50
    stairType = QUEST
    switchMethod = random
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    Routine updateTilt2
    Routine trial
  LoopTerminator trials_2
